PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [900, 600]
  expName = mpad1_exp
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    CodeComponent all_variables
      Code Type = Py
      Before Experiment:
        # TODO
        # fix baseline_temp & temp_baseline for all scripts
        # set start_study_mode to NoPrompt

        # Experiment
        from src.experiments.logger import setup_logger, close_logger
        from src.experiments.participant_data import read_last_participant

        logger_for_runner = setup_logger(__name__.rsplit(".", maxsplit=1)[-1], level=logging.INFO)

        participant_info = read_last_participant()
        #expInfo = {}
        expInfo['expName'] = "mpad1_exp"
        expInfo['participant'] = participant_info['participant']
        expInfo['age'] = participant_info['age']
        expInfo['gender'] = participant_info['gender']

        # iMotions
        start_study_mode = "NormalPrompt"

        # Stimuli
        seeds = [463, 320]#, 43, 999, 242, 32, 1, 98, 478, 48, 435]
        n_trials = len(seeds)
        this_trial = None # just initializing

        minimal_desired_duration = 2 # in seconds
        periods = [67, 20] # [0] is the baseline and [1] the modulation; in seconds
        frequencies = 1./np.array(periods)
        # calculate amplitudes based on VAS 70 - VAS 0
        temp_range = participant_info['temp_range'] # VAS 70 - VAS 0
        amplitudes = [1/3*temp_range/2, 2/3*temp_range/2]

        sample_rate = 60
        random_periods = True
        baseline_temp = participant_info['baseline_temp'] # @ VAS 35

        # While debugging, the code in stimuli_function is outcommented
        plateau_duration = 20
        n_plateaus = 4
        add_at_start = "random"
        add_at_end = True

        # Time
        stimuli_clock = core.Clock()
        iti_duration = 2 # 8  + np.random.randint(0, 5)

        # Thermoino
        port = "COM7" # use list_com_ports() beforehand to find out
        temp_baseline = 30 # has to be the same as in MMS (not the same as baseline_temp (sorry for confusing names))
        rate_of_rise = 5 # has to be the same as in MMS
        bin_size_ms = 500

        # Mouse control
        factor_to_hit_VAS_slider = 1.1
      End Experiment:
        close_logger(logger_for_runner)
    CodeComponent imotions_control
      Code Type = Py
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      Before Experiment:
        from src.experiments.imotions import RemoteControliMotions
      Begin Experiment:
        imotions_control = RemoteControliMotions(
            study = expInfo['expName'],
            participant = expInfo['participant'],
            age = expInfo['age'],
            gender = expInfo['gender']
        )

        imotions_control.connect()
        imotions_control.start_study(mode=start_study_mode)
      End Experiment:
        imotions_control.end_study()
        imotions_control.close()
    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Herzlich willkommen zum Haupt-Experiment!
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    TextComponent text_start_exp
      letterHeight = 0.05
      startVal [time (s)] = 1
      text = Das Experiment beginnt mit Tastendruck.
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    KeyboardComponent key_welcome
      allowedKeys = 'j','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine trial_prep
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    CodeComponent stimuli_function
      Code Type = Py
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      Before Experiment:
        from src.experiments.stimuli_function import StimuliFunction
      Begin Routine:
        trial = loop_trials.thisN

        stimuli = StimuliFunction(
            minimal_desired_duration=minimal_desired_duration,
            frequencies=frequencies,
            amplitudes=amplitudes,
            sample_rate=sample_rate,
            random_periods=random_periods,
            seed=seeds[trial]
        ).add_baseline_temp(
            baseline_temp=baseline_temp
        )#.add_plateaus(
        #    plateau_duration=plateau_duration,
        #    n_plateaus=n_plateaus,
        #    add_at_start=add_at_start,
        #    add_at_end=add_at_end)
    CodeComponent thermoino_prep
      Code Type = Py
      Begin Routine:
        luigi.flush_ctc()
        luigi.init_ctc(bin_size_ms=bin_size_ms)
        luigi.create_ctc(
            temp_course=stimuli.wave,
            sample_rate=stimuli.sample_rate,
            rate_of_rise_option="mms_program")
        luigi.load_ctc()
        luigi.trigger()

        prep_duration = luigi.prep_ctc()[1]
    CodeComponent mouse_for_prep
      Code Type = Py
      Before Experiment:
        import src.experiments.mouse_action as mouse_action
        from src.experiments.mouse_action import pixel_pos_y
      Begin Routine:
        vas_pos_y = pixel_pos_y(
            component_pos = vas_cont.pos,
            win_size = win.size,
            win_pos = win.pos)

        mouse_action.hold()
      Each Frame:
        mouse_action.check(vas_pos_y*factor_to_hit_VAS_slider)
    CodeComponent rating_prep
      Code Type = Py
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      Begin Routine:
        stimuli_clock.reset()
      Each Frame:
        # Cheap workaround to get the last rating of the prep slider
        if prep_duration - 1 < stimuli_clock.getTime():
            prep_vas_rating = vas_cont_prep.getMarkerPos()
    SliderComponent vas_cont_prep
      durationEstim = 2
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      labels = ("Kein Schmerz","Stärkste vorstellbare Schmerzen")
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = prep_duration
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 100)
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  Routine trial_vas_continuous
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    CodeComponent thermoino
      Code Type = Py
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      Before Experiment:
        from src.experiments.thermoino import ThermoinoComplexTimeCourses
      Begin Experiment:
        luigi = ThermoinoComplexTimeCourses(
            port=port,
            temp_baseline=temp_baseline,
            rate_of_rise=rate_of_rise)

        luigi.connect()
      Begin Routine:
        # After we have reached the starting temperature for the ctc.
        luigi.trigger()
        luigi.exec_ctc()
      End Experiment:
        luigi.close()
    CodeComponent mouse
      Code Type = Py
      Before Experiment:
        import src.experiments.mouse_action as mouse_action
        from src.experiments.mouse_action import pixel_pos_y
      Begin Routine:
        # Everything stays the same from the prep scale
        vas_pos_y = pixel_pos_y(
           component_pos = vas_cont.pos,
           win_size = win.size,
           win_pos = win.pos)
        # mouse_action.hold()
      Each Frame:
        mouse_action.check(vas_pos_y*factor_to_hit_VAS_slider)
      End Routine:
        mouse_action.release()
    CodeComponent imotions_event
      Code Type = Py
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      Before Experiment:
        from src.experiments.imotions import EventRecievingiMotions
        from psychopy import core
      Begin Experiment:
        """ Connect with event recieving API """
        imotions_event = EventRecievingiMotions()
        imotions_event.connect()
        imotions_event.start_study

        # create a clock
        stimuli_clock = core.Clock()
      Begin Routine:
        """ Send discrete marker for stimuli beginning """
        # TODO: add imotions marker for stimuli start and end
        imotions_event.send_marker("stimuli", "Stimuli begins")
        # Start the clock
        stimuli_clock.reset()
      Each Frame:
        """ Stream data for pain rating """
        imotions_event.send_ratings(
            vas_cont.getMarkerPos())

        idx_stimuli = int(stimuli_clock.getTime()*stimuli.sample_rate)
        if idx_stimuli < len(stimuli.wave):
            imotions_event.send_temperatures(stimuli.wave[idx_stimuli])
      End Experiment:
        """ Close event recieving API connection """
        imotions_event.end_study()
        imotions_event.close()
      End Routine:
        """ Send discrete marker for stimuli ending """
        imotions_event.send_marker("stimuli", "Stimuli ends")
    CodeComponent rating
      Code Type = Py
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      Begin Routine:
        # Set the starting VAS value of the slider accordingly to the prep slider
        # This has to be done after the slider initialization
        vas_cont.startValue = prep_vas_rating
    SliderComponent vas_cont
      durationEstim = 250
      forceEndRoutine = False
      granularity = 0
      labels = ("Kein Schmerz", "Sehr starke Schmerzen")
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = stimuli.duration
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 100)
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    TextComponent text_vas_cont
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimuli.duration
      text [set every frame] = $f"Dies ist eine kontinuierliche VAS.\n\nIhr momentaner Schmerz liegt bei: {vas_cont.getMarkerPos():.0f}" if vas_cont.getMarkerPos() is not None else "Dies ist eine kontinuierliche VAS.\n\nIhr momentaner  Schmerz liegt bei: --"
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  Routine trial_end
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    CodeComponent reset_temp
      Code Type = Py
      Begin Routine:
        # Sometimes the Theroino takes some time to set the temperature back to baseline
        # Here, we force this with a loop for each frame.
        success = False
      Each Frame:
        if not success and frameN % 20 == 0:
            success = luigi.set_temp(temp_baseline)[2]
    CodeComponent this_trial
      Code Type = Py
      Begin Experiment:
        this_trial = None
      Begin Routine:
        # Store the trial number for conditional text box
        this_trial = loop_trials.thisN
    PolygonComponent fix_cross
      durationEstim = 8
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
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    KeyboardComponent key_trial_end
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_trial_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $"Dieser Block ist geschafft.\n\nNun wechseln wir die Haustelle am Arm.\n\n(Leertaste zum Fortfahren)" if this_trial != n_trials -1 else "Das Experiment ist vorbei."
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  Routine trial_next
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    KeyboardComponent key_trial_next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_trial_next
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = (Leertaste zum Fortzufahren)
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  Routine bye
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    TextComponent text_bye
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = Vielen Dank für Ihre Versuchsteilnahme!
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Flow
  Routine welcome
  LoopInitiator loop_trials loopType="TrialHandler"
    loopType = random
    nReps = n_trials
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    Routine trial_prep
    Routine trial_vas_continuous
    Routine trial_end
    Routine trial_next
  LoopTerminator loop_trials
  Routine bye
